PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1440, 900]
  Full-screen window = False
  Show info dlg = False
  expName = Antonyms
  Screen = 1
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Routines
  Routine trial
    TextComponent StimulusWord
      text [set every repeat] = $Word
      stopVal [duration (s)] = 1.0
      pos = (0, 120)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 60
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    TextComponent ChoiceWord1
      text [set every repeat] = $Choice1
      stopVal [duration (s)] = 1.0
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 40
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    TextComponent ChoiceWord2
      text [set every repeat] = $Choice2
      stopVal [duration (s)] = 1.0
      pos = (0, -40)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 40
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    TextComponent ChoiceWord3
      text [set every repeat] = $Choice3
      stopVal [duration (s)] = 1.0
      pos = (0, -80)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 40
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    TextComponent ChoiceWord4
      text [set every repeat] = $Choice4
      stopVal [duration (s)] = 1.0
      pos = (0, -120)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 40
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    KeyboardComponent key_resp_2
      forceEndRoutine = True
      allowedKeys = 'A','B','C','D','a','b','c','d'
      startVal [time (s)] = 0.0
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  Routine ITI
    TextComponent text
      text = +
      stopVal [duration (s)] = 0.75
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 50
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = AntonymsTest - Sheet1.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'Choice4': u'ddd', 'Word': u'AAAAAA', 'Choice1': u'aaa', 'Choice2': u'bbb', 'Choice3': u'ccc'},
      {'Choice4': u'ddd', 'Word': u'BBBBBB', 'Choice1': u'aaa', 'Choice2': u'bbb', 'Choice3': u'ccc'},
      {'Choice4': u'hhh', 'Word': u'CCCCC', 'Choice1': u'eee', 'Choice2': u'fff', 'Choice3': u'ggg'},
      {'Choice4': u'lll', 'Word': u'DDD', 'Choice1': u'iii', 'Choice2': u'jjj', 'Choice3': u'kkk'},
      {'Choice4': u'ppp', 'Word': u'EEE', 'Choice1': u'mmm', 'Choice2': u'nnn', 'Choice3': u'ooo'}]
    Routine trial
    Routine ITI
  LoopTerminator trials
