PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [800, 600]
  Full-screen window = False
  Save log file = False
  Save wide csv file = False
  Show info dlg = False
  expName = ForwardDigitSpan
  Screen = 1
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Routines
  Routine trial
    SoundComponent sound_1
      sound = NumberSounds/1.wav
      stopVal [duration (s)] = 1.5
      startVal [time (s)] = 0.0
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Flow
  LoopInitiator trials loopType="TrialHandler"
    loopType = random
    nReps = 5
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    Routine trial
  LoopTerminator trials
