PsychoPy2experiment version="1.85.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = pix
  Window size (pixels) = [1440, 900]
  Full-screen window = False
  Show info dlg = False
  expName = PaperFolding
  Screen = 1
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Routines
  Routine trial
    ImageComponent image
      stopVal [duration (s)] = 1.0
      pos = (0, 200)
      startVal [time (s)] = 0.0
      image [set every repeat] = $Stimulus
      size [set every repeat] = (-1,-1)
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Flow
  LoopInitiator trials loopType="TrialHandler"
    conditionsFile = ../PaperFolding/CognitiveTaskSetupFiles - PaperFold.csv
    loopType = random
    nReps = 1
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    conditions:
      [{'Stimulus': u'altAfold3.bmp', 'Choice5': u'altAchoice35.bmp', 'Choice1': u'altAchoice31.bmp', 'Choice2': u'altAchoice32.bmp', 'Choice3': u'altAchoice33.bmp', 'Choice4': u'altAchoice34.bmp', 'Corr': 1},
      {'Stimulus': u'altAfold8.bmp', 'Choice5': u'altAchoice85.bmp', 'Choice1': u'altAchoice81.bmp', 'Choice2': u'altAchoice82.bmp', 'Choice3': u'altAchoice83.bmp', 'Choice4': u'altAchoice84.bmp', 'Corr': 1},
      {'Stimulus': u'altBfold1.bmp', 'Choice5': u'altBchoice15.bmp', 'Choice1': u'altBchoice11.bmp', 'Choice2': u'altBchoice12.bmp', 'Choice3': u'altBchoice13.bmp', 'Choice4': u'altBchoice14.bmp', 'Corr': 1},
      {'Stimulus': u'altBfold2.bmp', 'Choice5': u'altBchoice25.bmp', 'Choice1': u'altBchoice21.bmp', 'Choice2': u'altBchoice22.bmp', 'Choice3': u'altBchoice23.bmp', 'Choice4': u'altBchoice24.bmp', 'Corr': 1},
      {'Stimulus': u'altBfold3.bmp', 'Choice5': u'altBchoice35.bmp', 'Choice1': u'altBchoice31.bmp', 'Choice2': u'altBchoice32.bmp', 'Choice3': u'altBchoice33.bmp', 'Choice4': u'altBchoice34.bmp', 'Corr': 1},
      {'Stimulus': u'altBfold4.bmp', 'Choice5': u'altBchoice45.bmp', 'Choice1': u'altBchoice41.bmp', 'Choice2': u'altBchoice42.bmp', 'Choice3': u'altBchoice43.bmp', 'Choice4': u'altBchoice44.bmp', 'Corr': 1},
      {'Stimulus': u'altBfold5.bmp', 'Choice5': u'altBchoice55.bmp', 'Choice1': u'altBchoice51.bmp', 'Choice2': u'altBchoice52.bmp', 'Choice3': u'altBchoice53.bmp', 'Choice4': u'altBchoice54.bmp', 'Corr': 1}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
    Routine trial
  LoopTerminator trials
