PsychoPy2experiment version="3.1.0"
Settings
  Experiment info = {'participant':'', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = use prefs
  Window size (pixels) = (1024, 768)
  expName = ResponseTimeTest
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Routines
  Routine trial
    TextComponent text
      color = red
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      text = +
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    KeyboardComponent key_resp_2
      allowedKeys = 'left'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine blank
    TextComponent text_2
      letterHeight = 0.2
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text = +
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Flow
  Routine blank
  LoopInitiator trials loopType="TrialHandler"
    loopType = sequential
    nReps = 50
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    Routine trial
    Routine blank
  LoopTerminator trials
