PsychoPy2experiment version="1.90.1"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1440, 900]
  Full-screen window = False
  Save log file = False
  Show mouse = True
  Show info dlg = False
  expName = SelectiveRemindingWTimer
  Screen = 1
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Routines
  Routine Wait
    TextComponent WaitText
      stopVal [duration (s)] = 1.0
      units = pix
      text = +
      startVal [time (s)] = 0.0
      letterHeight = 45
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  Routine ThankYou
    TextComponent Thanks
      stopVal [duration (s)] = 3
      units = pix
      text = Thank You
      startVal [time (s)] = 0.0
      letterHeight = 45
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  Routine Instructions
    TextComponent instr
      wrapWidth = 1000
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 45
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      text:
        You will see a list of 12 words, presented one by one.

        After you see the list you will have to recall as many words as you can
        by speaking them out loud.

        For those items that were not recalled during the current trial, the words will be repeated and you
        are to again recall as many of the original list words as they can.
        This procedure is repeated for 5 trials.

        Press [return] to begin
    KeyboardComponent key_resp_4
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
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  Routine EnterResponses
    TextComponent ResponseText
      units = pix
      text = Please repeat the word list
      startVal [time (s)] = 0.0
      letterHeight = 45
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    KeyboardComponent key_resp_2
      correctAns = $corr
      forceEndRoutine = False
      discard previous = False
      allowedKeys = '1','2','3','4','5,','6'
      startVal [time (s)] = 0.0
      store = all keys
      syncScreenRefresh = False
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    KeyboardComponent key_resp_3
      forceEndRoutine = True
      allowedKeys = 'return'
      startVal [time (s)] = 0.0
      store = nothing
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    CodeComponent CounterCode
      Begin Experiment:
        countDownStarted = False
      Each Frame:
        timeRemaining = countDownClock.getTime()
        if timeRemaining <= 0.0:
            continueRoutine = False
            ResponseText.finished = True
            countDownStarted = False
        else:
            seconds = int(timeRemaining)
            timeText = "%02d"%(seconds)
      Begin Routine:
        if not countDownStarted:
            countDownClock = core.CountdownTimer(10)
            countDownStarted = True
      End Routine:
        countDownStarted = False
    TextComponent ResponseTimer
      pos = (40, -200)
      units = pix
      text [set every frame] = $timeText
      startVal [time (s)] = 0.0
      letterHeight = 30
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    TextComponent RemainingTime
      text = Remaining Time:
      pos = (-100, -200)
      units = pix
      startVal [time (s)] = 0.0
      letterHeight = 30
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  Routine trial
    TextComponent text
      stopVal [duration (s)] = 0.3
      units = pix
      text [set every repeat] = $Word
      startVal [time (s)] = 0.0
      letterHeight = 45
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Flow
  Routine Instructions
  LoopInitiator Blocks loopType="TrialHandler"
    isTrials = False
    loopType = sequential
    nReps = 5
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    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = ../SelectiveReminding/WordList.csv
      loopType = sequential
      nReps = 1
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      conditions:
        [OrderedDict([(u'Word', u'DOG'), (u'corr', u'1')]),
        OrderedDict([(u'Word', u'FOX'), (u'corr', u'2')]),
        OrderedDict([(u'Word', u'HORSE'), (u'corr', u'3')]),
        OrderedDict([(u'Word', u'BUFFALO'), (u'corr', u'4')]),
        OrderedDict([(u'Word', u'LION'), (u'corr', u'5')]),
        OrderedDict([(u'Word', u'RHINOCEROS'), (u'corr', u'6')]),
        OrderedDict([(u'Word', u'ELEPHANT'), (u'corr', u'7')]),
        OrderedDict([(u'Word', u'ANTELOPE'), (u'corr', u'8')]),
        OrderedDict([(u'Word', u'BEAR'), (u'corr', u'9')]),
        OrderedDict([(u'Word', u'LAMB'), (u'corr', u'a')]),
        OrderedDict([(u'Word', u'RAT'), (u'corr', u'b')]),
        OrderedDict([(u'Word', u'RACCOON'), (u'corr', u'c')])]
      Routine trial
    LoopTerminator trials
    Routine EnterResponses
    Routine Wait
  LoopTerminator Blocks
  Routine ThankYou
