PsychoPy2experiment version="3.1.0"
Settings
  Experiment info = {'participant': '', 'session': '001'}
  Full-screen window = False
  Monitor = testMonitor
  Save log file = False
  Save wide csv file = False
  Screen = 1
  Show info dlg = False
  Units = height
  Window size (pixels) = [1440, 900]
  expName = Tester
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Routines
  Routine trial
    TextComponent text
      letterHeight = 0.1
      startVal [time (s)] = 0.0
      text = WORD
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    MouseComponent mouse
      clickable = polygon
      forceEndRoutineOnPress = valid click
      saveMouseState = final
      startVal [time (s)] = 0.0
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    PolygonComponent polygon
      fillColor = $[1,1,1]
      opacity = 0.1
      pos = (0, -0.3)
      shape = rectangle
      size = (0.5, 0.5)
      startVal [time (s)] = 0.0
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Flow
  Routine trial
