PsychoPy2experiment version="1.85.3"
Settings
  Monitor = testMonitor
  Experiment info = {u'session': u'001', u'participant': u''}
  Units = use prefs
  Window size (pixels) = [1920, 1080]
  Full-screen window = False
  Show info dlg = False
  expName = SemanticRichnessBLockBasedv1
  Screen = 1
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Routines
  Routine CountDown
    TextComponent Three
      text = 3
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    TextComponent Two
      text = 2
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 1
      letterHeight = 0.2
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    TextComponent One
      text = 1
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 2
      letterHeight = 0.2
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  Routine Intro
    TextComponent Instructions
      text = Instructions
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent StartExperimentResponse
      forceEndRoutine = True
      allowedKeys = '5'
      startVal [time (s)] = 0.0
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  Routine WordStimulus
    TextComponent WordStim
      text [set every repeat] = $Concept
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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    KeyboardComponent Response
      forceEndRoutine = True
      allowedKeys = '1','2','left','down'
      startVal [time (s)] = 0.0
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  Routine WhiteCrosshair
    TextComponent WhiteCrossHairStim
      text = +
      stopVal [duration (s)] = 5
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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  Routine RedCrosshair
    TextComponent RedCrossHairStim
      color = red
      text = +
      stopVal [duration (s)] = 1.0
      startVal [time (s)] = 0.0
      letterHeight = 0.2
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Flow
  Routine Intro
  Routine WhiteCrosshair
  LoopInitiator Blocks loopType="TrialHandler"
    conditionsFile = Run1Blocks.csv
    isTrials = False
    loopType = sequential
    nReps = 1
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    conditions:
      [{'rows': u'0:5'},
      {'rows': u'6:11'},
      {'rows': u'12:17'},
      {'rows': u'18:23'},
      {'rows': u'24:29'},
      {'rows': u'30:35'},
      {'rows': u'36:41'},
      {'rows': u'42:46'},
      {'rows': u'48:53'},
      {'rows': u'54:59'}]
    Routine CountDown
    LoopInitiator trials loopType="TrialHandler"
      conditionsFile = OriginalStimList.csv
      loopType = sequential
      nReps = 1
      Selected rows = $rows
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      conditions:
        [{'Concept': u'colander', 'SemanticCategory': u'Non-Living', 'NSN': 1, 'logHAL': 4.77, 'NoF': 5.0, 'BigramFrequency': 7393, 'Familiarity': None, 'LgSUBTLWF': 0.845, 'FreqQ': 1, 'NoA': None, 'Concreteness': None, 'Length': 8, 'BOIRating': 4.0, 'NSNcategory': u'L', 'ind': 61, 'HAL': 118, 'id': 93, 'OrthographicND': 0, 'Imageability': None},
        {'Concept': u'yolk', 'SemanticCategory': u'Non-Living', 'NSN': 8, 'logHAL': 5.78, 'NoF': None, 'BigramFrequency': 1228, 'Familiarity': 471.0, 'LgSUBTLWF': 1.3419999999999999, 'FreqQ': 1, 'NoA': 3.0, 'Concreteness': 593.0, 'Length': 4, 'BOIRating': 4.34, 'NSNcategory': u'H', 'ind': 1, 'HAL': 324, 'id': 41, 'OrthographicND': 2, 'Imageability': 530.0},
        {'Concept': u'cauliflower ', 'SemanticCategory': u'Living', 'NSN': 7, 'logHAL': 5.472, 'NoF': 13.0, 'BigramFrequency': 3964, 'Familiarity': 462.0, 'LgSUBTLWF': 1.462, 'FreqQ': 1, 'NoA': 1.0, 'Concreteness': 642.0, 'Length': 11, 'BOIRating': 5.31, 'NSNcategory': u'H', 'ind': 2, 'HAL': 238, 'id': 19, 'OrthographicND': 0, 'Imageability': 567.0},
        {'Concept': u'radish', 'SemanticCategory': u'Living', 'NSN': 1, 'logHAL': 4.934, 'NoF': 14.0, 'BigramFrequency': 2421, 'Familiarity': 456.0, 'LgSUBTLWF': 1.505, 'FreqQ': 1, 'NoA': 1.0, 'Concreteness': None, 'Length': 6, 'BOIRating': 4.67, 'NSNcategory': u'L', 'ind': 62, 'HAL': 139, 'id': 84, 'OrthographicND': 2, 'Imageability': None}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
      Routine WordStimulus
      Routine RedCrosshair
    LoopTerminator trials
    Routine WhiteCrosshair
  LoopTerminator Blocks
